PsychoPy2experiment version="2024.2.2a1"
Settings
  Audio latency priority = 4
  Audio lib = ptb
  Data filename = u'data/%s/%s_%s_%s' % (expInfo['participant'], expInfo['participant'], expName, expInfo['session'])
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  elAddress = 100.1.1.1
  elDataFiltering = FILTER_LEVEL_OFF
  elLiveFiltering = FILTER_LEVEL_OFF
  elModel = EYELINK 1000 DESKTOP
  elPupilAlgorithm = ELLIPSE_FIT
  elPupilMeasure = PUPIL_DIAMETER
  elSampleRate = 1000
  elSimMode = False
  elTrackEyes = LEFT_EYE
  elTrackingMode = PUPIL_CR_TRACKING
  expName = emg_artifact
  eyetracker = SR Research Ltd
  keyboardBackend = ioHub
  logging level = debug
  measureFrameRate = False
  runMode = 1
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Routines
  Routine video
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    MovieComponent movie_video
      No audio = True
      backend = ffpyplayer
      forceEndRoutine = True
      movie [set every repeat] = $video_filename_list[trials.thisRepN]
      size = (1.77778, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      stopWithRoutine = False
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    CodeComponent trigger_video
      Code Type = Py
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      Begin Routine:
        video_pulse_started = False
      Each Frame:
        if movie_video.status == STARTED and not video_pulse_started:
            dev.activate_line(bitmask=video_start_code)
            eyetracker.sendMessage(video_start_code)
            video_pulse_started = True
  Routine instruct_task
    RoutineSettingsComponent instruct_task
      saveStartStop = False
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    TextComponent text_instruct_task
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        INSTRUCTIONS:

        You will be shown a series of facial movements that we would like you to mimic. Watch the facial expression made during each short video and mimic that movement along with the person on screen until you hear a beep. The beep signals the end of the movement and the beginning of a 5 second rest period.


        Press any of the white keys to continue
    KeyboardComponent key_instruct_task
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_task
      saveStartStop = False
      sound [set every repeat] = resource/instruct_task.wav
      startVal [time (s)] = 0.8
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  Routine instruct_begin
    RoutineSettingsComponent instruct_begin
      saveStartStop = False
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    TextComponent text_instruct_begin
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        INSTRUCTIONS:

        This is the end of the practice round. We will now begin two actual rounds of trials. Please watch the facial expression in each short video and mimic that movement until you hear a beep.


        Press the green key to begin the task
    KeyboardComponent key_instruct_begin
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_begin
      saveStartStop = False
      sound [set every repeat] = resource/instruct_begin.wav
      startVal [time (s)] = 0.8
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    CodeComponent skip_routine
      Code Type = Py
      Begin Routine:
        # End of the current block
        dev.activate_line(bitmask=block_end_code)
        eyetracker.sendMessage(block_end_code)
        # no need to wait 500ms since we have thank you routine before experiment ends

        if blocks.thisRepN > 0:
            # skip this routine if not immediately after the practice round
            continueRoutine = False
      End Routine:
        if blocks.thisRepN < n_blocks:
            # Start of the next block
            core.wait(0.5)  # wait 500ms after the block_end_code triggers
            dev.activate_line(bitmask=block_start_code)
            eyetracker.sendMessage(block_start_code)
            # no need to wait 500ms again as we have a 5.0s rest period before video triggers
  Routine instruct_prac
    RoutineSettingsComponent instruct_prac
      saveStartStop = False
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    TextComponent text_instruct_practice
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        INSTRUCTIONS:

        There will be a practice round to familiarize you with all of the movements and the timing of the trials. This will be followed by 2 rounds of actual trials.

        Please try to mimic the facial expressions that you see as accurately as you can.


        Press the green key to begin
    KeyboardComponent key_instruct_practice
      allowedKeys = '1'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_instruct_practice
      saveStartStop = False
      sound [set every repeat] = resource/instruct_practice.wav
      startVal [time (s)] = 0.8
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    CodeComponent trigger_block_start
      Code Type = Py
      Begin Routine:
        # Start of practice block
        dev.activate_line(bitmask=block_start_code)
        eyetracker.sendMessage(block_start_code)
        # no need to wait 500ms as we have a 5.0s rest period before video triggers
  Routine rest
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    PolygonComponent circle_rest
      fillColor = darkseagreen
      interpolate = nearest
      lineColor = darkseagreen
      saveStartStop = False
      shape = circle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    CodeComponent set_circle_arc
      Code Type = Py
      Begin Routine:
        # Save a copy of full vertices so we can reset during routine
        full_vertices = circle_rest.vertices.copy()
        # Figure out the number of circle arcs
        N_steps = 25
        vertex_stepsize = len(full_vertices) // (N_steps - 1)
      Each Frame:
        # First reset circle vertices back to full
        circle_rest.vertices = full_vertices
        # Manually create a pie shape by subselecting vertices of a circle
        timer_N = tThisFlip // (5.0 / N_steps)
        circle_rest.vertices = np.vstack(([[0., 0.]],
                                         circle_rest.vertices[int(timer_N * vertex_stepsize):],
                                         circle_rest.vertices[0]))
      End Routine:
        # Reset circle vertices back to full one more time
        circle_rest.vertices = full_vertices
        # with only two vertices on the last loop, this got set to False
        circle_rest.closeShape = True
  Routine __start__
    RoutineSettingsComponent __start__
      saveStartStop = False
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    TextComponent text_start
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0
      text = We are now ready to begin...
      units = norm
      wrapWidth = 1.8
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    SoundComponent read_start
      saveStartStop = False
      sound [set every repeat] = resource/ready_to_begin.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 1.8
      syncScreenRefresh = False
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    CodeComponent trigger_table
      Code Type = Py
      Begin Experiment:
        ##TASK ID TRIGGER VALUES##
        # special code 100 (task start, task ID should follow immediately)
        task_start_code = 100
        # special code 105 (task ID for EMG muscle artifact task)
        task_ID_code = 105
        print("Starting experiment: < EMG Artifact Task >. Task ID:", task_ID_code)

        ##GENERAL TRIGGER VALUES##
        # special code 122 (block start)
        block_start_code = 122
        # special code 123 (block end)
        block_end_code = 123

        ##TASK SPECIFIC TRIGGER VALUES##
        # N.B.: only use values 1-99 and provide clear comments on used values
        video_start_code = 3
        video_end_code = 4
    CodeComponent task_id
      Code Type = Py
      Begin Experiment:
        dev.activate_line(bitmask=task_start_code)  # special code for task start
        core.wait(0.5)  # wait 500ms between two consecutive triggers
        dev.activate_line(bitmask=task_ID_code)  # special code for task ID
    CodeComponent eeg
      Code Type = Py
      Before Experiment:
        import pyxid2
        import threading
        import signal


        def exit_after(s):
            '''
            function decorator to raise KeyboardInterrupt exception
            if function takes longer than s seconds
            '''
            def outer(fn):
                def inner(*args, **kwargs):
                    timer = threading.Timer(s, signal.raise_signal, args=[signal.SIGINT])
                    timer.start()
                    try:
                        result = fn(*args, **kwargs)
                    finally:
                        timer.cancel()
                    return result
                return inner
            return outer


        @exit_after(1)  # exit if function takes longer than 1 seconds
        def _get_xid_devices():
            return pyxid2.get_xid_devices()


        def get_xid_devices():
            print("Getting a list of all attached XID devices...")
            attempt_count = 0
            while attempt_count >= 0:
                attempt_count += 1
                print('     Attempt:', attempt_count)
                attempt_count *= -1  # try to exit the while loop
                try:
                    devices = _get_xid_devices()
                except KeyboardInterrupt:
                    attempt_count *= -1  # get back in the while loop
            return devices


        devices = get_xid_devices()

        if devices:
            dev = devices[0]
            print("Found device:", dev)
            assert dev.device_name in ['Cedrus C-POD', 'Cedrus StimTracker Quad'], "Incorrect XID device detected."
            if dev.device_name == 'Cedrus C-POD':
                pod_name = 'C-POD'
            else:
                pod_name = 'M-POD'
            dev.set_pulse_duration(50)  # set pulse duration to 50ms

            # Start EEG recording
            print("Sending trigger code 126 to start EEG recording...")
            dev.activate_line(bitmask=126)  # trigger 126 will start EEG
            print("Waiting 10 seconds for the EEG recording to start...\n")
            core.wait(10)  # wait 10s for the EEG system to start recording

            # Marching lights test
            print(f"{pod_name}<->eego 7-bit trigger lines test...")
            for line in range(1, 8):  # raise lines 1-7 one at a time
                print("  raising line {} (bitmask {})".format(line, 2 ** (line-1)))
                dev.activate_line(lines=line)
                core.wait(0.5)  # wait 500ms between two consecutive triggers
            dev.con.set_digio_lines_to_mask(0)  # XidDevice.clear_all_lines()
            print("EEG system is now ready for the experiment to start.\n")

        else:
            # Dummy XidDevice for code components to run without C-POD connected
            class dummyXidDevice(object):
                def __init__(self):
                    pass
                def activate_line(self, lines=None, bitmask=None):
                    pass


            print("WARNING: No C/M-POD connected for this session! "
                  "You must start/stop EEG recording manually!\n")
            dev = dummyXidDevice()
      End Experiment:
        # Stop EEG recording
        dev.activate_line(bitmask=127)  # trigger 127 will stop EEG
    CodeComponent condition_setup
      Code Type = Py
      Begin Experiment:
        # Video filenames
        video_filenames = ['brow_lower',
                           'brow_raise',
                           'squint',
                           'eyes_clench',
                           'nose_wrinkle',
                           'mouth_open']
        n_videos = len(video_filenames)

        # Put into correct format with directory path and extension
        video_filename_list = ['resource/' + x + '.mp4' for x in video_filenames]

        # Number of trial blocks
        n_blocks = 2
    EyetrackerRecordComponent etRecord
      actionType = Start Only
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.0
      stopWithRoutine = False
      syncScreenRefresh = False
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  Routine beep
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    SoundComponent sound_beep
      sound [set every repeat] = 880
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.2
      stopWithRoutine = False
      syncScreenRefresh = False
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    CodeComponent trigger_beep
      Code Type = Py
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      Begin Routine:
        beep_pulse_started = False
      Each Frame:
        if sound_beep.status == STARTED and not beep_pulse_started:
            dev.activate_line(bitmask=video_end_code)
            eyetracker.sendMessage(video_end_code)
            beep_pulse_started = True
  Routine _welcome
    RoutineSettingsComponent _welcome
      saveStartStop = False
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    TextComponent text_welcome
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        Welcome! This task will take approximately 10 minutes.

        Before we explain the task, we need to first calibrate the eyetracking camera. Please sit in a comfortable position with your head on the chin rest. Once we begin, it is important that you stay in the same position throughout this task.

        Please take a moment to adjust the chair height, chin rest, and sitting posture. Make sure that you feel comfortable and can stay still for a while.


        When you are ready, press any of the white keys to begin
    KeyboardComponent key_welcome
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_welcome
      saveStartStop = False
      sound [set every repeat] = resource/welcome.wav
      startVal [time (s)] = 0.8
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  Routine _et_instruct
    RoutineSettingsComponent _et_instruct
      saveStartStop = False
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    TextComponent text_et
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.8
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      text:
        During the calibration, you will see a target circle moving around the screen. Please try to track it with your eyes.

        Make sure to keep looking at the circle when it stops, and follow it when it moves. It is important that you keep your head on the chin rest once this part begins.


        Press any of the white keys when you are ready, and our team will start the calibration for you
    KeyboardComponent key_et
      allowedKeys = '3', '4', '5', '6'
      forceEndRoutine = True
      registerOn = release
      saveStartStop = False
      startVal [time (s)] = 0.2
      store = nothing
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    SoundComponent read_et
      saveStartStop = False
      sound [set every repeat] = resource/eyetrack_calibrate_instruct.wav
      startVal [time (s)] = 0.8
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  Routine _et_mask
    RoutineSettingsComponent _et_mask
      saveStartStop = False
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    TextComponent text_mask
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.05
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  EyetrackerCalibrationRoutine _et_cal
    borderColor = green
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    fillColor = white
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = black
    innerRadius = 0.005
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.015
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    textColor = white
    units = from exp settings
  Routine __end__
    RoutineSettingsComponent __end__
      saveStartStop = False
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    TextComponent text_thank_you
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Thank you. You have completed this task!
      units = norm
      wrapWidth = 1.8
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    SoundComponent read_thank_you
      saveStartStop = False
      sound [set every repeat] = resource/thank_you.wav
      startVal [time (s)] = 0.2
      stopVal [duration (s)] = 2.7
      syncScreenRefresh = False
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Flow
  Routine _welcome
  Routine _et_instruct
  Routine _et_mask
  EyetrackerCalibrationRoutine _et_cal
  Routine __start__
  Routine instruct_task
  Routine instruct_prac
  LoopInitiator blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = n_blocks + 1
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    LoopInitiator trials loopType="TrialHandler"
      loopType = sequential
      nReps = n_videos
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      Routine rest
      Routine video
      Routine beep
    LoopTerminator trials
    Routine instruct_begin
  LoopTerminator blocks
  Routine __end__
